PsychoPy2experiment version="2020.2.4"
Settings
  Audio latency priority = 4
  Audio lib = sounddevice
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = dummy_task
  logging level = debug
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Routines
  Routine intruction
    TextComponent Instructions
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Training: Please choose high (press key ‘h’) or low (press key ‘l’) based on what underlying distribution you believe the tone cloud (sequence of 3 tones) is from.

        Also note that in the tone cloud any number of tones (0-3) could be from a background distribution. A background tone in most cases will sound different than one from the high/low distribution.

        When you encounter background tone(s) use your best judgement to decide if that entire set is from the low / high distribution. ‘h’ and ‘l’ are the only two options.

        Press any key to start.
    KeyboardComponent key_resp
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_train
    SoundComponent tone_cloud
      sound [set every repeat] = $"soundfiles_three_tones_train_v2/"+ Name
      startVal [time (s)] = 0.1
      volume = 0.3
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    KeyboardComponent resp
      allowedKeys = ['h','l']
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
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    TextComponent reminder_instruction
      letterHeight = 0.1
      pos = (0, -1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = keys - ‘h’ : high dist     ’l’ : low dist
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  Routine trial_test
    SoundComponent test_tone_cloud
      sound [set every repeat] = $"soundfiles_three_tones_test_v2/"+ Name
      startVal [time (s)] = 0.1
      volume [set every repeat] = 0.3
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    KeyboardComponent test_resp
      allowedKeys = ['h','l']
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.6
      storeCorrect = True
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    TextComponent test_reminder_instruction
      letterHeight = 0.1
      pos = (0, -10)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.3
      text [set every frame] = ‘h’: high dist,     ‘l’: low dist
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  Routine instruction_test
    TextComponent test_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Hopefully you have a clear idea of what a high or low tone sounds like and how it might be different from a background tone.

        Based on your knowledge, please start the testing phase. Press any key to begin.
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        c = 0
        w = 0
        run = 0
      Begin Routine:
        if not resp.keys :
          msg="Failed to respond"
        elif resp.corr:#stored on last run routine
          msg="Correct!"
          c = c+1
        else:
          msg="Not quite!"
          w = w+1

        run = run+1
        if run %10 == 0:
           msg = msg + "       " + "last 10 trials   " + str(c*100/(c+w)) + " % correct"
           c = 0
           w = 0
    TextComponent feedback_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for your time and for helping us out!
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  Routine test_feedback
    CodeComponent text_feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        ""
        c = 0
        w = 0
        run = 0
        msg = ""
      Begin Routine:
        if test_resp.corr:#stored on last run routine
          c = c+1
          msg_test="Correct!"
        else:
          w = w+1
          msg_test="Oops! That was wrong"

        run = run+1
        if run %10 == 0:
           msg =  "Last 10 trials   " + str(c*100/(c+w)) + " % correct"
           c = 0
           w = 0
        else:
            msg = ""
    TextComponent test_feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine headphone_check_test
    SoundComponent headphone_check_sound
      sound [set every repeat] = $"assets/" + Name
      startVal [time (s)] = 0.5
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    TextComponent headphone_check_text
      letterHeight = 0.04
      startVal [time (s)] = 0.5
      text [set every repeat] = Please enter 1 / 2 / 3 based on which tone you think is the softest. 
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    KeyboardComponent headphone_check_resp
      allowedKeys [set every repeat] = '1','2','3'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine volume_check_test
    SoundComponent volume_check_sound
      sound [set every repeat] = $"assets/" + Name
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      volume [set every repeat] = 1
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    KeyboardComponent volume_check_resp
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent volume_check_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Level calibration

        First, set your computer volume to about 25% of maximum.

        Then turn up the volume until the calibration noise is at a loud but comfortable level.

        Please press ‘d’ once you are satisfied with the volume.
  Routine headphone_check_feedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        headphone_count=0
        expt=0
      Begin Routine:
        if not headphone_check_resp.keys :
          headphone_check_msg="Failed to respond"
        elif headphone_check_resp.corr:#stored on last run routine
          headphone_count +=1
          headphone_check_msg = "Correct answers: " + str(headphone_count)
        expt += 1
      End Routine:
        if expt == 6 and headphone_count < 5:
            psychoJS.quit()
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $headphone_check_msg
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  Routine headphone_check_reminder
    TextComponent headphone_check_reminder_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Please kindly wear headphones for our task, not wearing headphones will end up disqualifying you. 
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Flow
  Routine headphone_check_reminder
  LoopInitiator volume_check_trials loopType="TrialHandler"
    conditions = [OrderedDict([('Name', 'noise_headphone_check'), ('type', 'volume_check')])]
    conditionsFile = Volume_check.csv
    loopType = sequential
    nReps = 1
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    Routine volume_check_test
  LoopTerminator volume_check_trials
  LoopInitiator headphone_check_trials loopType="TrialHandler"
    conditionsFile = headphone_check.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Name', 'antiphase_HC_IOS.wav'), ('type', 'hp0'), ('corrAns', 3)]),
      OrderedDict([('Name', 'antiphase_HC_ISO.wav'), ('type', 'hp1'), ('corrAns', 2)]),
      OrderedDict([('Name', 'antiphase_HC_OIS.wav'), ('type', 'hp2'), ('corrAns', 3)]),
      OrderedDict([('Name', 'antiphase_HC_OSI.wav'), ('type', 'hp3'), ('corrAns', 2)]),
      OrderedDict([('Name', 'antiphase_HC_SIO.wav'), ('type', 'hp4'), ('corrAns', 1)]),
      OrderedDict([('Name', 'antiphase_HC_SOI.wav'), ('type', 'hp5'), ('corrAns', 1)])]
    Routine headphone_check_test
    Routine headphone_check_feedback
  LoopTerminator headphone_check_trials
  Routine intruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = train_three_tones_v2_file.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Name', 'train_wave_high_0.wav'), ('corrAns', 'h'), ('Tones', [680, 535, 680]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_low_0.wav'), ('corrAns', 'l'), ('Tones', [261, 261, 261]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_low_1.wav'), ('corrAns', 'l'), ('Tones', [261, 261, 331]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_high_1.wav'), ('corrAns', 'h'), ('Tones', [535, 535, 535]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_low_2.wav'), ('corrAns', 'l'), ('Tones', [331, 331, 331]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_high_2.wav'), ('corrAns', 'h'), ('Tones', [535, 535, 680]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_high_3.wav'), ('corrAns', 'h'), ('Tones', [535, 680, 535]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_low_3.wav'), ('corrAns', 'l'), ('Tones', [331, 261, 331]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_high_4.wav'), ('corrAns', 'h'), ('Tones', [535, 680, 680]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_low_4.wav'), ('corrAns', 'l'), ('Tones', [331, 261, 261]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_high_5.wav'), ('corrAns', 'h'), ('Tones', [535, 161, 680]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_high_6.wav'), ('corrAns', 'h'), ('Tones', [127, 127, 127]), ('Tonekind', None)]),
      OrderedDict([('Name', 'train_wave_high_7.wav'), ('corrAns', 'h'), ('Tones', [100, 864, 680]), ('Tonekind', None)])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
    Routine trial_train
    Routine feedback
  LoopTerminator trials
  Routine instruction_test
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = test_three_tones_v2_file.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Name', 'test_wave_high_0.wav'), ('corrAns', 'h'), ('Tones', [535, 535, 680]), ('Tonekind', [2, 2, 2])]),
      OrderedDict([('Name', 'test_wave_high_1.wav'), ('corrAns', 'h'), ('Tones', [680, 331, 680]), ('Tonekind', [2, 2, 2])]),
      OrderedDict([('Name', 'test_wave_low_0.wav'), ('corrAns', 'l'), ('Tones', [331, 331, 261]), ('Tonekind', [1, 1, 1])]),
      OrderedDict([('Name', 'test_wave_high_2.wav'), ('corrAns', 'h'), ('Tones', [680, 680, 535]), ('Tonekind', [2, 2, 2])]),
      OrderedDict([('Name', 'test_wave_low_1.wav'), ('corrAns', 'l'), ('Tones', [535, 331, 261]), ('Tonekind', [1, 1, 1])]),
      OrderedDict([('Name', 'test_wave_low_2.wav'), ('corrAns', 'l'), ('Tones', [261, 331, 261]), ('Tonekind', [1, 1, 1])]),
      OrderedDict([('Name', 'test_wave_low_3.wav'), ('corrAns', 'l'), ('Tones', [331, 261, 331]), ('Tonekind', [1, 1, 1])]),
      OrderedDict([('Name', 'test_wave_high_3.wav'), ('corrAns', 'h'), ('Tones', [535, 680, 535]), ('Tonekind', [2, 2, 2])]),
      OrderedDict([('Name', 'test_wave_high_4.wav'), ('corrAns', 'h'), ('Tones', [535, 680, 680]), ('Tonekind', [2, 2, 2])]),
      OrderedDict([('Name', 'test_wave_high_5.wav'), ('corrAns', 'h'), ('Tones', [680, 680, 680]), ('Tonekind', [2, 2, 2])]),
      OrderedDict([('Name', 'test_wave_low_4.wav'), ('corrAns', 'l'), ('Tones', [161, 421, 331]), ('Tonekind', [0, 1, 1])]),
      OrderedDict([('Name', 'test_wave_low_5.wav'), ('corrAns', 'l'), ('Tones', [331, 421, 205]), ('Tonekind', [1, 1, 1])])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
    Routine trial_test
    Routine test_feedback
  LoopTerminator test_trials
  Routine thanks
